<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="arduinoPort_1" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>isNotInside</ipy:Name>
        <ipy:Script>import math
from System import Tuple

@returns(Tuple[str,bool])
def process(value):
  chirp_info="{}_0.4".format(value[0])
  is_not_inside = value[1]
  return Tuple[str,bool](chirp_info,is_not_inside)
</ipy:Script>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM11</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="7" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>